/*----------------------------------------------------------------
%W%  %G%
j4.txt  translated Mon Nov  1 16:56:20 1993 by ntscable 2.0
source file syntax: Douglas 3D
output file syntax: CABLE
soma: diameter = 25 um length = 35 um area = 2747.9 um2
11 primary neurites
87 branches totaling 17667.6 um in length, 52996.2 um2 in area
3383 tree points translated to 164 segments (1 requested)
Neurites divided into segments of equal dx between adjacent digitized
branch points.
Segment length constrained to be < 17667.6 um.
----------------------------------------------------------------*/

nsomasec = 1
naxonsec = 0
ndendsec = 80
napicdendsec = 83
sec_counted = 1
					/* create sections */
create    soma[1],\
          dend1[9],\
          dend2[13],\
          dend3[5],\
          dend4[7],\
          dend5[1],\
          dend6[11],\
          dend7[13],\
          dend8[5],\
          dend9[5],\
          dend10[11],\
		  apic[83] //dend11[83]


forall {
	insert pas
	g_pas = 0.0002
	e_pas = -65.
}





/*----------------------------------------------------------------*/
proc geometry() { local i, j

						/* soma[0] geometry */
    soma[0] {
        nseg = 1
/* 	diam = 25 */
/* 	L = 35 */
		pt3dadd(0,0,0,25)
		pt3dadd(35,0,0,25)
    }

					/* connect primary neurites */
    soma[0] connect dend1[0] (0), 0.5
    soma[0] connect dend2[0] (0), 0.5
    soma[0] connect dend3[0] (0), 0.5
    soma[0] connect dend4[0] (0), 0.5
    soma[0] connect dend5[0] (0), 0.5
    soma[0] connect dend6[0] (0), 0.5
    soma[0] connect dend7[0] (0), 0.5
    soma[0] connect dend8[0] (0), 0.5
    soma[0] connect dend9[0] (0), 0.5
    soma[0] connect dend10[0] (0), 0.5
    //soma[0] connect dend11[0] (0), 0.5
		soma[0] connect apic[0] (0), 0.5    


					/* neurite geometry*/
    for i = 0,8 {
        dend1[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,12 {
        dend2[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,4 {
        dend3[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,6 {
        dend4[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,0 {
        dend5[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,10 {
        dend6[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,12 {
        dend7[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,4 {
        dend8[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,4 {
        dend9[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,10 {
        dend10[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,82 {
        apic[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }



					/* branching topology*/
    for i = 1,8 {
        dend1[fscan()] connect dend1[i] (0), fscan()
    }

    for i = 1,12 {
        dend2[fscan()] connect dend2[i] (0), fscan()
    }

    for i = 1,4 {
        dend3[fscan()] connect dend3[i] (0), fscan()
    }

    for i = 1,6 {
        dend4[fscan()] connect dend4[i] (0), fscan()
    }

    for i = 1,0 {
        dend5[fscan()] connect dend5[i] (0), fscan()
    }

    for i = 1,10 {
        dend6[fscan()] connect dend6[i] (0), fscan()
    }

    for i = 1,12 {
        dend7[fscan()] connect dend7[i] (0), fscan()
    }

    for i = 1,4 {
        dend8[fscan()] connect dend8[i] (0), fscan()
    }

    for i = 1,4 {
        dend9[fscan()] connect dend9[i] (0), fscan()
    }

    for i = 1,10 {
        dend10[fscan()] connect dend10[i] (0), fscan()
    }

    for i = 1,82 {
        apic[fscan()] connect apic[i] (0), fscan()
    }

}

geometry()

NEURITE COORDINATES AND DIAMETERS:

    1 4
   -54.8      6.5      -25      3.5
     -49      5.2    -24.3      3.5
   -44.5        7    -23.7      3.5
   -42.8      7.2    -24.5      3.5

    1 3
   -42.8      7.2    -24.5      3.5
   -41.5        8      -23      2.3
     -40        9      -23      1.7

    1 47
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

CONNECTIONS:
        0    1
        1    1
        1    1
        3    1
        3    1
        0    1
        6    1
        6    1

        0    1
        1    1
        1    1
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

/*----------------------------------------------------------------*/
proc geometry() { 

	/* NULL geometry procedure: keeps the user from
	calling the geometry procedure in isolation. */

    printf("\nYou must re-read the entire geometry\n")
    printf("file to execute geometry().\n\n")
}

objref dendlist
dendlist = new SectionList()

for i=0, 8 {
	dend1[i] dendlist.append()
}

for i=0, 12 {
	dend2[i] dendlist.append()
}

for i=0, 4 {
	dend3[i] dendlist.append()
}

for i=0, 6 {
	dend4[i] dendlist.append()
}

for i=0, 0 {
	dend5[i] dendlist.append()
}

for i=0, 10 {
	dend6[i] dendlist.append()
}

for i=0, 12 {
	dend7[i] dendlist.append()
}

for i=0, 4 {
	dend8[i] dendlist.append()
}

for i=0, 4 {
	dend9[i] dendlist.append()
}

for i=0, 10 {
	dend10[i] dendlist.append()
}

dendlistexist = 1

